<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.0.8">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>/Users/helenarusso/Documents/Pesquisa/UCSD Post-doc/Acyl lipids/Examples_lipids/#SynCon/mzML files.nosync/ACN_13_20240515131241.mzML</file>
            <file>/Users/helenarusso/Documents/Pesquisa/UCSD Post-doc/Acyl lipids/Examples_lipids/#SynCon/mzML files.nosync/Bacteroides_eggerthii_DSM_20697_1.mzML</file>
            <file>/Users/helenarusso/Documents/Pesquisa/UCSD Post-doc/Acyl lipids/Examples_lipids/#SynCon/mzML files.nosync/Bacteroides_pectinophilus_ATCC_43243_1.mzML</file>
            <file>/Users/helenarusso/Documents/Pesquisa/UCSD Post-doc/Acyl lipids/Examples_lipids/#SynCon/mzML files.nosync/Oscillibacter_sp_KLE_1728_1.mzML</file>
            <file>/Users/helenarusso/Documents/Pesquisa/UCSD Post-doc/Acyl lipids/Examples_lipids/#SynCon/mzML files.nosync/Bacteroides_sp_2_1_22_1.mzML</file>
            <file>/Users/helenarusso/Documents/Pesquisa/UCSD Post-doc/Acyl lipids/Examples_lipids/#SynCon/mzML files.nosync/Clostridium_sp_M62_1_1.mzML</file>
            <file>/Users/helenarusso/Documents/Pesquisa/UCSD Post-doc/Acyl lipids/Examples_lipids/#SynCon/mzML files.nosync/Bacteroides_xylanisolvens_DSMZ_18836_1.mzML</file>
            <file>/Users/helenarusso/Documents/Pesquisa/UCSD Post-doc/Acyl lipids/Examples_lipids/#SynCon/mzML files.nosync/ACN_1.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="true">
            <parameter name="Scan filters" selected="false">
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            </parameter>
            <parameter name="Crop MS1 m/z" selected="false"/>
            <parameter name="MS1 detector (Advanced)" selected="true" selected_item="Factor of lowest signal">
                <module name="Factor of lowest signal">
                    <parameter name="Noise factor">3.5</parameter>
                </module>
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            </parameter>
            <parameter name="MS2 detector (Advanced)" selected="true" selected_item="Factor of lowest signal">
                <module name="Factor of lowest signal">
                    <parameter name="Noise factor">2.5</parameter>
                </module>
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            </parameter>
            <parameter name="Denormalize fragment scans (traps)">false</parameter>
        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.02</min>
                <max>14.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">3</parameter>
        <parameter name="Minimum intensity for consecutive scans">1000.0</parameter>
        <parameter name="Minimum absolute height">500.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chroms</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
            <module name="Savitzky Golay">
                <parameter name="Retention time smoothing" selected="true">5</parameter>
                <parameter name="Mobility smoothing" selected="false">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</parameter>
            </module>
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>20.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="true">0.01</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.2</parameter>
        <parameter name="Minimum relative height">0.01</parameter>
        <parameter name="Minimum absolute height">1000.0</parameter>
        <parameter name="Min ratio of peak top/edge">2.0</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.01</min>
            <max>1.0</max>
        </parameter>
        <parameter name="Minimum scans (data points)">3</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">PROCESS IN PLACE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">3</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.2</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.2</parameter>
        <parameter name="Minimum scans (data points)">2</parameter>
        <parameter name="Original feature list">PROCESS IN PLACE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">13C peak</parameter>
        <parameter name="Minimum aligned features (samples)" selected="false">
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        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="true">
            <parameter name="m/z tolerance">
                <absolutetolerance>0.0015</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Max charge">2</parameter>
            <parameter name="Estimate minimum carbon">true</parameter>
            <parameter name="Remove if 13C">true</parameter>
            <parameter name="Exclude isotopes">O</parameter>
        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false">
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        </parameter>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">false</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the feature number ID">true</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">PROCESS IN PLACE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.2</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">PROCESS IN PLACE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/helenarusso/Documents/Pesquisa/UCSD Post-doc/Acyl lipids/Examples_lipids/#SynCon/MZmine_Helena_test1/MZmine_test1.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
</batch>
